PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = BIAT
  logging level = error
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine end
    TextComponent endMessage
      text = Please contact the researcher
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent endResponse
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions1
    KeyboardComponent contResponse1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent category1Label
      color = $[-1.000,1.000,1.000]
      text = FLOWERS
      pos = [0, 0.9]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent category1Stimuli
      color = $[-1.000,1.000,1.000]
      text = Orchid Lily Violet Daisy
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent attributeLabel
      color = $[1.000,1.000,-1.000]
      text = GOOD
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attributeStimuli
      color = $[1.000,1.000,-1.000]
      text = Wonderful Best Superb Excellent
      pos = [0, 0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent orLabel
      text = or
      pos = [0, 0.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent pressI1
      text = Press the I key for GOOD or FLOWERS
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent pressE
      text = Press the E key for anything else
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent goFast
      text = Go as fast as you can
      pos = [0, -.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent pressSpace
      text = Press the space bar to begin
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    CodeComponent code
      Begin Routine:
        trialsCounter = 0
  Routine instructions2
    KeyboardComponent contResponse2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent category2Label
      color = $[-1.000,1.000,1.000]
      text = INSECTS
      pos = [0, 0.9]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent category2Stimuli
      color = $[-1.000,1.000,1.000]
      text = Ant Locust Bee Wasp
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent attributeLabel2
      color = $[1.000,1.000,-1.000]
      text = GOOD
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attributeStimuli2
      color = $[1.000,1.000,-1.000]
      text = Wonderful Best Superb Excellent
      pos = [0, 0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent orLabel2
      text = or
      pos = [0, 0.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent pressI2
      text = Press the I key for GOOD or INSECTS
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent pressE2
      text = Press the E key for anything else
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent goFast2
      text = Go as fast as you can
      pos = [0, -.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent pressSpace2
      text = Press the space bar to begin
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    CodeComponent code_2
      Begin Routine:
        trialsCounter = 0
  Routine trial2
    TextComponent stimulus2
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusVariable2
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent responseCorr2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = responseAllowedCorr
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent responseIncor2
      forceEndRoutine = False
      allowedKeys [set every repeat] = responseAllowedIncorr
      startVal [time (s)] = 0.4
      store = first key
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    CodeComponent code2
      Begin Experiment:
        msg2=""
      Each Frame:
        if len(responseIncor2.keys)<1:
            msg2=""
        else:
            msg2="X"
    TextComponent accuracyFeedback2
      color = red
      text [set every frame] = $msg2
      pos = [0, -.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.15
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    TextComponent target2
      color = $[-1.000,1.000,1.000]
      text [set every repeat] = $target2Text
      pos = [0, .8]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent attribute2
      color [set every repeat] = $[1.000,1.000,-1.000]
      text [set every repeat] = $attributeText
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent or2
      text = or
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine trial1FourTrials
    TextComponent stimulus1_2
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusVariable1
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent responseCorr1_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = responseAllowedCorr
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent responseIncor1_2
      forceEndRoutine = False
      allowedKeys [set every repeat] = responseAllowedIncorr
      startVal [time (s)] = 0.4
      store = first key
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    CodeComponent code1_2
      Begin Experiment:
        msg1=""
      Each Frame:
        if len(responseIncor1_2.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback1_2
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.15
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    TextComponent target1_2
      color = $[-1.000,1.000,1.000]
      text [set every repeat] = $target1Text
      pos = [0, .8]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent attribute1_2
      color [set every repeat] = $[1.000,1.000,-1.000]
      text [set every repeat] = $attributeText
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent or1_2
      text = or
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    CodeComponent fourTrialsCode
      Begin Routine:
        trialsCounter = trialsCounter + 1
      End Routine:
        if trialsCounter >= 4:
            trial1Loop1FourTrials.finished = True
  Routine trial1
    TextComponent stimulus1
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusVariable1
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent responseCorr1
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = responseAllowedCorr
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent responseIncor1
      forceEndRoutine = False
      allowedKeys [set every repeat] = responseAllowedIncorr
      startVal [time (s)] = 0.4
      store = first key
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    CodeComponent code1
      Begin Experiment:
        msg1=""
      Each Frame:
        if len(responseIncor1.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback1
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.15
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    TextComponent target1
      color = $[-1.000,1.000,1.000]
      text [set every repeat] = $target1Text
      pos = [0, .8]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent attribute1
      color [set every repeat] = $[1.000,1.000,-1.000]
      text [set every repeat] = $attributeText
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent or1
      text = or
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine trial2FourTrials
    TextComponent stimulus2_2
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulusVariable2
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent responseCorr2_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = responseAllowedCorr
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent responseIncor2_2
      forceEndRoutine = False
      allowedKeys [set every repeat] = responseAllowedIncorr
      startVal [time (s)] = 0.4
      store = first key
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    CodeComponent code2_2
      Begin Experiment:
        msg2=""
      Each Frame:
        if len(responseIncor2_2.keys)<1:
            msg2=""
        else:
            msg2="X"
    TextComponent accuracyFeedback2_2
      color = red
      text [set every frame] = $msg2
      pos = [0, -.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.15
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    TextComponent target2_2
      color = $[-1.000,1.000,1.000]
      text [set every repeat] = $target2Text
      pos = [0, .8]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent attribute2_2
      color [set every repeat] = $[1.000,1.000,-1.000]
      text [set every repeat] = $attributeText
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    TextComponent or2_2
      text = or
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    CodeComponent fourTrialsCode2
      Begin Routine:
        trialsCounter = trialsCounter + 1
      End Routine:
        if trialsCounter >= 4:
            trial2Loop1FourTrials.finished = True
Flow
  LoopInitiator repeatBlockPairLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine instructions1
    LoopInitiator trial1Loop1FourTrials loopType="TrialHandler"
      conditionsFile = categoryStimuli.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Orcid', u'stimulusVariable2': u'Ant', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'},
        {u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Lilly', u'stimulusVariable2': u'Locust', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'},
        {u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Violet', u'stimulusVariable2': u'Bee', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'},
        {u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Daisy', u'stimulusVariable2': u'Wasp', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'}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
      Routine trial1FourTrials
    LoopTerminator trial1Loop1FourTrials
    LoopInitiator trial1Loop1 loopType="TrialHandler"
      conditionsFile = category&AttributeStimuli.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Orcid', u'stimulusVariable2': u'Ant', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'},
        {u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Lilly', u'stimulusVariable2': u'Locust', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'},
        {u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Violet', u'stimulusVariable2': u'Bee', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'},
        {u'incorrAns': u'e', u'stimulusColour': [-1.0, 1.0, 1.0], u'target2Text': u'INSECTS', u'stimulusVariable1': u'Daisy', u'stimulusVariable2': u'Wasp', u'corrAns': u'i', u'attributeText': u'GOOD', u'responseAllowedCorr': u'i', u'responseAllowedIncorr': u'e', u'trialtype': 1, u'target1Text': u'FLOWERS'}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
      Routine trial1
    LoopTerminator trial1Loop1
    Routine instructions2
    LoopInitiator trial2Loop1FourTrials loopType="TrialHandler"
      conditionsFile = categoryStimuli.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial2FourTrials
    LoopTerminator trial2Loop1FourTrials
    LoopInitiator trial2Loop1 loopType="TrialHandler"
      conditionsFile = category&AttributeStimuli.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial2
    LoopTerminator trial2Loop1
  LoopTerminator repeatBlockPairLoop
  Routine end
